PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.7569, 1.0000, 1.0000
  expName = DeepTrust
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Consent_Page
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    TextboxComponent consent_box
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      lineSpacing = 1.5
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in this study. Please read the information below.

        What will I have to do?
        You will read a few short texts and answer some questions about them
        (for example, whether you think the text was written by a human or by
        an AI system, and whether you would like to check it with an AI detector).
        The study will take about 10–15 minutes.

        Anonymity and data protection
        We do not collect any identifying information about you.
        Your responses will be stored under a random participant code and used
        only for teaching/research purposes in anonymised form.

        Voluntary participation
        Your participation is completely voluntary.
        You are free to stop the study at any time by closing this window,
        without giving a reason and without any negative consequences.

        Consent
        By pressing SPACE below, you indicate your consent to participate.
    KeyboardComponent consent_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import random

        nConditions = 6  # number of rows in first_content.xlsx
        randIndex = random.randint(0, nConditions - 1)

        # create a string like "3:4" meaning "use only row 3"
        conditionSelector = f"{randIndex}:{randIndex + 1}"
      Begin JS Experiment:
        let nConditions = 6;  // number of rows in first_content.xlsx
        let randIndex = Math.floor(Math.random() * nConditions);

        // create a string like "3:4" meaning "use only row 3"
        conditionSelector = randIndex.toString() + ":" + (randIndex + 1).toString();
  Routine first_text
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    TextboxComponent question_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.35)
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextboxComponent answer_box
      alignment = top-left
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      overflow = scroll
      pos = (0, -0.3)
      size = (1.5, 3.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $answer
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    KeyboardComponent first_text_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_AI_judgment
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    TextboxComponent textbox
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (3.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Do you think the response you just read was written by an AI system or by a human?




        Press A for AI-generated.
        Press H for human-written.
    KeyboardComponent first_AI_key
      allowedKeys [set every repeat] = 'a', 'h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_check
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    TextboxComponent textbox_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (2.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Would you like to check this response using the AI detector?



        Press Y for Yes.
        Press N for No.
    KeyboardComponent first_check_key
      allowedKeys [set every repeat] = 'y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trust_feedback
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        function getKey(comp) {
            try {
                let k = comp.keys;
                if (Array.isArray(k)) return k.length > 0 ? k[k.length - 1].toLowerCase() : "none";
                if (typeof k === "string") return k.toLowerCase();
            } catch (e) { return "none"; }
            return "none";
        }

        let ai_resp = getKey(first_AI_key);
        let check_resp = getKey(first_check_key);

        // ---------- LABELS ----------
        let user_label, opposite_label;
        if (ai_resp === "a") {
            user_label = "AI-generated";
            opposite_label = "human-written";
        } else {
            user_label = "human-written";
            opposite_label = "AI-generated";
        }

        // ---------- DETECTORS ----------
        let detectors = ["GPTZero", "OriginalityAI", "Writer.com Detector"];

        // SUPPORTIVE VALUES
        function supportive() {
            return [
                Math.floor(Math.random()*13)+85,
                Math.floor(Math.random()*16)+80,
                Math.floor(Math.random()*17)+82,
            ];
        }

        // CONTRADICTORY VALUES
        function contradictory() {
            return [
                Math.floor(Math.random()*14)+2,
                Math.floor(Math.random()*18)+3,
                Math.floor(Math.random()*18)+1,
            ];
        }

        let header =
            "----------------------------------------\n" +
            " AI DETECTOR ANALYSIS RESULTS\n" +
            "----------------------------------------\n\n";

        let footer = "\n----------------------------------------\nPress SPACE to continue.";

        // ---------- YES ----------
        if (check_resp === "y") {
            let v = supportive();

            feedback_msg =
                header +
                `${detectors[0].padEnd(25)} ${v[0]}% ${user_label}\n` +
                `${detectors[1].padEnd(25)} ${v[1]}% ${user_label}\n` +
                `${detectors[2].padEnd(25)} ${v[2]}% ${user_label}\n\n` +
                "Your judgment appears CORRECT." +
                footer;

            trust_condition = "raised";
        }

        // ---------- NO ----------
        else if (check_resp === "n") {
            let v = contradictory();

            feedback_msg =
                header +
                `${detectors[0].padEnd(25)} ${v[0]}% ${user_label}\n` +
                `${detectors[1].padEnd(25)} ${v[1]}% ${user_label}\n` +
                `${detectors[2].padEnd(25)} ${v[2]}% ${user_label}\n\n` +
                "Your judgment appears INCORRECT.\n" +
                `The text was more likely ${opposite_label.toUpperCase()}.` +
                footer;

            trust_condition = "lowered";
        }

        // ---------- UNKNOWN ----------
        else {
            feedback_msg =
                "Could not register your response." +
                footer;
            trust_condition = "unknown";
        }

        psychoJS.experiment.addData("ai_resp_clean", ai_resp);
        psychoJS.experiment.addData("check_resp_clean", check_resp);
        psychoJS.experiment.addData("trust_condition", trust_condition);
      Begin Routine:
        import random

        # ---------- SAFE KEY EXTRACTOR ----------
        def get_key(comp):
            try:
                k = comp.keys
                if isinstance(k, list):
                    return k[-1].lower() if k else "none"
                if isinstance(k, str):
                    return k.lower()
            except:
                return "none"
            return "none"

        ai_resp = get_key(first_AI_key)
        check_resp = get_key(first_check_key)

        # ---------- LABELS ----------
        if ai_resp == "a":
            user_label = "AI-generated"
            opposite_label = "human-written"
        else:
            user_label = "human-written"
            opposite_label = "AI-generated"

        # ---------- DETECTORS ----------
        detectors = ["GPTZero", "OriginalityAI", "Writer.com Detector"]

        # ---------- VALUES ----------
        def supportive():
            return [
                random.randint(85, 97),
                random.randint(80, 95),
                random.randint(82, 98),
            ]

        def contradictory():
            return [
                random.randint(2, 15),
                random.randint(3, 20),
                random.randint(1, 18),
            ]

        # ---------- FORMATTING ----------
        header = (
            "----------------------------------------\n"
            " AI DETECTOR ANALYSIS RESULTS\n"
            "----------------------------------------\n\n"
        )

        footer = "\n----------------------------------------\nPress SPACE to continue."

        # ---------- YES ----------
        if check_resp == "y":
            v = supportive()

            feedback_msg = (
                header +
                f"{detectors[0]:25} {v[0]}% {user_label}\n"
                f"{detectors[1]:25} {v[1]}% {user_label}\n"
                f"{detectors[2]:25} {v[2]}% {user_label}\n\n"
                "Your judgment appears CORRECT." +
                footer
            )
            trust_condition = "raised"

        # ---------- NO ----------
        elif check_resp == "n":
            v = contradictory()

            feedback_msg = (
                header +
                f"{detectors[0]:25} {v[0]}% {user_label}\n"
                f"{detectors[1]:25} {v[1]}% {user_label}\n"
                f"{detectors[2]:25} {v[2]}% {user_label}\n\n"
                "Your judgment appears INCORRECT.\n"
                f"The text was more likely {opposite_label.upper()}." +
                footer
            )
            trust_condition = "lowered"

        else:
            feedback_msg = "Could not register your response." + footer
            trust_condition = "unknown"

        thisExp.addData("ai_resp_clean", ai_resp)
        thisExp.addData("check_resp_clean", check_resp)
        thisExp.addData("trust_condition", trust_condition)
    TextboxComponent feedback_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $feedback_msg
    KeyboardComponent feedback_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_AI_judgment
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    TextboxComponent Secondaitext
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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      text:
        Here is another explanation about Human–AI collaboration:

        "In many interdisciplinary settings, collaboration between humans and AI systems requires careful attention to trust, transparency, and shared decision-making. Psychologists focus on human behavior and cognitive biases, philosophers explore ethical and epistemic implications, and computer scientists develop the algorithms that shape interactions."

        ----------------------------------------
        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_AI_judgment_2
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    TextboxComponent second_AI_question
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Do you think this explanation was AI-generated or written by a human?

        Press A for AI-generated
        Press H for Human-written
    KeyboardComponent key_resp_2
      allowedKeys = 'a', 'h', 'A', 'H'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_check
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    TextboxComponent secondcheck
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Would you like to check this explanation using the AI detector?

        Press Y for Yes
        Press N for No

        ----------------------------------------
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','Y', 'N'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_screen
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    TextboxComponent debrief_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (4.5, 4.5)
      startVal [time (s)] = 0.0
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      text:
        ----------------------------------------
        Thank You for Participating!
        ----------------------------------------

        This experiment examined how interacting with AI-generated content
        and receiving detector feedback influences people’s trust and
        suspicion when evaluating new information.

        Some clarification:

        • The “AI detector results” shown earlier were NOT produced by real detectors.
        • The confidence scores and feedback were intentionally manipulated.
        • The purpose was to understand how positive or negative confirmation
          affects your likelihood to check content again.

        Please note:
        The second explanation you evaluated was always AI-generated,
        for every participant. We are interested in how trust manipulation
        influenced your final decision to use or not use the detector.

        Your data has been recorded anonymously and will be used strictly
        for educational and research purposes within this course.

        ----------------------------------------
        Press SPACE to finish.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextboxComponent thanks
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for your valuabe time!!

        Press space to exit
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_questionairre
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    TextboxComponent Ai_familiarity
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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      text:
        How frequently do you use AI tools in your daily life?



        1 = I never use AI tools

        2 = Rarely

        3 = Occasionally

        4 = Often

        5 = Daily or multiple times a day
    KeyboardComponent key_resp_6
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_questionare2
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    TextboxComponent reading_behaviour
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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      text:
        How critically do you engage with content you read online?



        1 = I never question what I read online

        2 = I sometimes do

        3 = I often do

        4 = I always question what I read online
    KeyboardComponent reading_behaviour_response
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Consent_Page
  Routine pre_questionairre
  Routine pre_questionare2
  LoopInitiator first_loop loopType="TrialHandler"
    Selected rows = $conditionSelector
    conditionsFile = first_content.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'question': 'Why is an interdisciplinary approach important in the Human and AI master programme that brings together psychology, philosophy, and computer science?', 'answer': 'From a computer science perspective, an interdisciplinary Human and AI programme is crucial because technical systems never exist in a vacuum. We can design elegant algorithms, but once they are deployed, they interact with human attention, bias, and social norms. Working with psychologists helps us understand how people actually interpret model outputs, when they over-trust or under-trust them, and how interfaces can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,
      {'question': 'Why is an interdisciplinary approach important in the Human and AI master programme that brings together psychology, philosophy, and computer science?', 'answer': 'From a psychology perspective, the value of an interdisciplinary Human and AI programme lies in treating AI systems as part of people’s cognitive environment. Human beings do not simply use tools; they adapt their attention, memory, and decision strategies to the tools available. AI-based systems shape how people distribute trust, how they experience control or helplessness, and how they form beliefs about evidence and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,
      {'question': 'Why is an interdisciplinary approach important in the Human and AI master programme that brings together psychology, philosophy, and computer science?', 'answer': 'From a philosophical perspective, an interdisciplinary Human and AI programme is vital because it forces us to confront questions that cannot be answered from within a single discipline. AI systems challenge our concepts of agency, explanation, knowledge, and responsibility. Philosophers can help articulate what it means to understand a model’s output, to give a justification rather than just a prediction, or to assign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,
      {'question': 'Why is an interdisciplinary approach important in the Human and AI master programme that brings together psychology, philosophy, and computer science?', 'answer': 'This is the human version from the computer science perspective. (Will be replaced with a real human-written answer later.)', 'perspective': 'CS', 'source_type': 'human'}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
    Routine first_text
  LoopTerminator first_loop
  Routine first_AI_judgment
  Routine first_check
  Routine trust_feedback
  Routine second_AI_judgment
  Routine second_AI_judgment_2
  Routine second_check
  Routine end_screen
  Routine thank_you
